{
  "info": {
    "name": "PFunkel",
    "description": "PFunkel Mutagenesis starting from master mix",
    "create-date": "2016-08-16",
    "run-notes": "note: testing"
  },
  "cycler": {
    "PFUNKEL3": {
      "lid": false,
      "volume": 100,
      "hold": 4,
      "vessel": "Tubes",
      "runtime": 47,
      "control": "CALC"
    },
    "PFUNKEL1": {
      "lid": false,
      "volume": 100,
      "hold": 4,
      "vessel": "Tubes",
      "runtime": 104,
      "control": "CALC"
    },
    "PFUNKEL2": {
      "lid": false,
      "volume": 100,
      "hold": 4,
      "vessel": "Tubes",
      "runtime": 80,
      "control": "CALC"
    }
  },
  "head": {
    "p10": {
      "volume": 10,
      "tool": "pipette",
      "tip-racks": [
        {
          "container": "p10-rack"
        }
      ],
      "tip-plunge": 7.5,
      "points": [
        {
          "f2": 0.41,
          "f1": 0.5
        },
        {
          "f2": 4.7,
          "f1": 5
        },
        {
          "f2": 10,
          "f1": 10
        }
      ],
      "axis": "b"
    },
    "p200": {
      "volume": 200,
      "tool": "pipette",
      "tip-racks": [
        {
          "container": "p200-rack"
        }
      ],
      "tip-plunge": 4,
      "points": [
        {
          "f2": 17.7,
          "f1": 20
        },
        {
          "f2": 98.5,
          "f1": 100
        },
        {
          "f2": 200,
          "f1": 200
        }
      ],
      "axis": "a"
    }
  },
  "ingredients": {
    "Taq_ligase": [
      {
        "volume": 5,
        "container": "ice",
        "location": "A6"
      }
    ],
    "water": [
      {
        "volume": 100,
        "container": "ice",
        "location": "A2"
      }
    ],
    "PfuTurbo_Cx_polymerase": [
      {
        "volume": 5,
        "container": "ice",
        "location": "A5"
      }
    ],
    "P23-Amp-rev": [
      {
        "volume": 5,
        "container": "ice",
        "location": "C1"
      }
    ],
    "Exonuclease_III": [
      {
        "volume": 5,
        "container": "ice",
        "location": "B2"
      }
    ],
    "UDG": [
      {
        "volume": 5,
        "container": "ice",
        "location": "B3"
      }
    ],
    "NEBuffer_1": [
      {
        "volume": 5,
        "container": "ice",
        "location": "B1"
      }
    ],
    "Exonuclease_I": [
      {
        "volume": 5,
        "container": "ice",
        "location": "B4"
      }
    ],
    "ssDNA": [
      {
        "volume": 20,
        "container": "ice",
        "location": "A4"
      }
    ],
    "CDRH3-NNK": [
      {
        "volume": 5,
        "container": "ice",
        "location": "A3"
      }
    ],
    "master_mix": [
      {
        "volume": 34,
        "container": "ice",
        "location": "A1"
      }
    ]
  },
  "instructions": [
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "A2",
                "touch-tip": false,
                "container": "ice",
                "locName": "water",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 45.69,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "ice",
                "locName": "master_mix",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        },
        {
          "mix": [
            {
              "volume": 39.845,
              "blowout": true,
              "container": "ice",
              "locName": "master_mix",
              "repetitions": 5,
              "liquid-tracking": true,
              "location": "A1"
            }
          ]
        }
      ],
      "tool": "p200"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "A3",
                "touch-tip": false,
                "container": "ice",
                "locName": "CDRH3-NNK",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 1.65,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "ice",
                "locName": "master_mix",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        },
        {
          "mix": [
            {
              "volume": 10,
              "blowout": true,
              "container": "ice",
              "locName": "master_mix",
              "repetitions": 5,
              "liquid-tracking": true,
              "location": "A1"
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "A4",
                "touch-tip": false,
                "container": "ice",
                "locName": "ssDNA",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 6.33,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "ice",
                "locName": "master_mix",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            },
            {
              "from": {
                "location": "A4",
                "touch-tip": false,
                "container": "ice",
                "locName": "ssDNA",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 6.33,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "ice",
                "locName": "master_mix",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        },
        {
          "mix": [
            {
              "volume": 10,
              "blowout": true,
              "container": "ice",
              "locName": "master_mix",
              "repetitions": 5,
              "liquid-tracking": true,
              "location": "A1"
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "A5",
                "touch-tip": false,
                "container": "ice",
                "locName": "PfuTurbo_Cx_polymerase",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 1,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "ice",
                "locName": "master_mix",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        },
        {
          "mix": [
            {
              "volume": 10,
              "blowout": true,
              "container": "ice",
              "locName": "master_mix",
              "repetitions": 5,
              "liquid-tracking": true,
              "location": "A1"
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "A6",
                "touch-tip": false,
                "container": "ice",
                "locName": "Taq_ligase",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 5,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "ice",
                "locName": "master_mix",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        },
        {
          "mix": [
            {
              "volume": 10,
              "blowout": true,
              "container": "ice",
              "locName": "master_mix",
              "repetitions": 5,
              "liquid-tracking": true,
              "location": "A1"
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "A2",
                "touch-tip": false,
                "container": "ice",
                "locName": "water",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 3.75,
              "blowout": true,
              "to": {
                "location": "B5",
                "touch-tip": true,
                "container": "ice",
                "locName": "diluted_Exonuclease_III",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "B1",
                "touch-tip": false,
                "container": "ice",
                "locName": "NEBuffer_1",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 0.5,
              "blowout": true,
              "to": {
                "location": "B5",
                "touch-tip": true,
                "container": "ice",
                "locName": "diluted_Exonuclease_III",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "B2",
                "touch-tip": false,
                "container": "ice",
                "locName": "Exonuclease_III",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 0.75,
              "blowout": true,
              "to": {
                "location": "B5",
                "touch-tip": true,
                "container": "ice",
                "locName": "diluted_Exonuclease_III",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        },
        {
          "mix": [
            {
              "volume": 2.5,
              "blowout": true,
              "container": "ice",
              "locName": "diluted_Exonuclease_III",
              "repetitions": 5,
              "liquid-tracking": true,
              "location": "B5"
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "A1",
                "touch-tip": false,
                "container": "ice",
                "locName": "master_mix",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 100,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "cycler",
                "locName": "cycler_tube",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        }
      ],
      "tool": "p200"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": null,
                "touch-tip": false,
                "container": null,
                "locName": "oil",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 30,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "cycler",
                "locName": "cycler_tube",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 5
              },
              "extra-pull": false
            }
          ]
        }
      ],
      "tool": "p200"
    },
    {
      "groups": [
        {
          "run": {
            "name": "PFUNKEL1"
          }
        }
      ],
      "tool": "cycler"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "A1",
                "touch-tip": false,
                "container": "cycler",
                "locName": "cycler_tube",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": -5
              },
              "volume": 5,
              "blowout": true,
              "to": {
                "location": "D1",
                "touch-tip": true,
                "container": "ice",
                "locName": "aliquot_1",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "B3",
                "touch-tip": false,
                "container": "ice",
                "locName": "UDG",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 1.9,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "cycler",
                "locName": "cycler_tube",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": -5
              },
              "extra-pull": false
            }
          ]
        },
        {
          "mix": [
            {
              "volume": 10,
              "blowout": true,
              "container": "cycler",
              "locName": "cycler_tube",
              "repetitions": 5,
              "liquid-tracking": true,
              "location": "A1"
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "B5",
                "touch-tip": false,
                "container": "ice",
                "locName": "diluted_Exonuclease_III",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 1.9,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "cycler",
                "locName": "cycler_tube",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": -5
              },
              "extra-pull": false
            }
          ]
        },
        {
          "mix": [
            {
              "volume": 10,
              "blowout": true,
              "container": "cycler",
              "locName": "cycler_tube",
              "repetitions": 5,
              "liquid-tracking": true,
              "location": "A1"
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "B4",
                "touch-tip": false,
                "container": "ice",
                "locName": "Exonuclease_I",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 1.9,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "cycler",
                "locName": "cycler_tube",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": -5
              },
              "extra-pull": false
            }
          ]
        },
        {
          "mix": [
            {
              "volume": 10,
              "blowout": true,
              "container": "cycler",
              "locName": "cycler_tube",
              "repetitions": 5,
              "liquid-tracking": true,
              "location": "A1"
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "run": {
            "name": "PFUNKEL2"
          }
        }
      ],
      "tool": "cycler"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "A1",
                "touch-tip": false,
                "container": "cycler",
                "locName": "cycler_tube",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": -5
              },
              "volume": 5,
              "blowout": true,
              "to": {
                "location": "D2",
                "touch-tip": true,
                "container": "ice",
                "locName": "aliquot_2",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "C1",
                "touch-tip": false,
                "container": "ice",
                "locName": "P23-Amp-rev",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "volume": 0.71,
              "blowout": true,
              "to": {
                "location": "A1",
                "touch-tip": true,
                "container": "cycler",
                "locName": "cycler_tube",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": -5
              },
              "extra-pull": false
            }
          ]
        },
        {
          "mix": [
            {
              "volume": 10,
              "blowout": true,
              "container": "cycler",
              "locName": "cycler_tube",
              "repetitions": 5,
              "liquid-tracking": true,
              "location": "A1"
            }
          ]
        }
      ],
      "tool": "p10"
    },
    {
      "groups": [
        {
          "run": {
            "name": "PFUNKEL3"
          }
        }
      ],
      "tool": "cycler"
    },
    {
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "location": "A1",
                "touch-tip": false,
                "container": "cycler",
                "locName": "cycler_tube",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": -5
              },
              "volume": 5,
              "blowout": true,
              "to": {
                "location": "D3",
                "touch-tip": true,
                "container": "ice",
                "locName": "aliquot_3",
                "delay": 0,
                "liquid-tracking": true,
                "tip-offset": 0
              },
              "extra-pull": false
            }
          ]
        }
      ],
      "tool": "p10"
    }
  ],
  "deck": {
    "cycler": {
      "labware": "8-tube-strip"
    },
    "ice": {
      "labware": "96-PCR-tubes"
    }
  }
}